//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)
(UseDirectionCosines "false")
(ResultImageFormat "mhd")

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator")
(Metric "AdvancedMattesMutualInformation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "AffineTransform")

// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 1)
(ImagePyramidSchedule 2 2 2)
(FixedImagePyramidSchedule 2 2 2)
(MovingImagePyramidSchedule 2 2 2)


// ********** Transform

(AutomaticTransformInitialization "true")
(AutomaticTransformInitializationMethod "GeometricalCenter")
(AutomaticScalesEstimation "false")
(Scales 1000 1000 1000 1000 1000 1000 1000 1000 10000 1 1 10)
(HowToCombineTransforms "Compose")


// ********** Optimizer

(UseFastAndLowMemoryVersion "false")
(UseJacobianPreconditioning "false")
(FiniteDifferenceDerivative "false")
(SigmoidInitialTime 0)
(SigmoidScale 0.1)
(SigmoidMax 1)
(SigmoidMin -0.8)
(MaximumStepLength 16)
(MaxBandCovSize 192)
(NumberOfBandStructureSamples 10)
(UseAdaptiveStepSizes "true")
(AutomaticParameterEstimation "false")
(ASGDParameterEstimationMethod "Original")
(NumberOfGradientMeasurements 0)
(NumberOfJacobianMeasurements 1000)
(NumberOfSamplesForExactGradient 100000)

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 1000)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 50.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.602)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 50.0)


// ********** Metric

//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32)
(NumberOfFixedHistogramBins 32)
(NumberOfMovingHistogramBins 32)
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 1)
(MovingKernelBSplineOrder 3)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeFixedMask "false")
(ErodeMovingMask "false")
(UseDifferentiableOverlap "false")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "RandomSparseMask")
(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 0)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

